CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:61
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'BiopsyNum: This is a unique number given to each patient in the database to anonymise their details. ', 'ImgNum: This image number refers to a representative field of view imaged with the microscope. There were approximately 10 images taken from each biopsy sample.', 'Channel: The various image channels used in the image analysis pipeline, including the outputs of preprocessing in FIJI and QuPath. ', 'HE = H&E images', 'Preprocessing QuPath model: Nuc = Nuclei, Bg = Background, Str = Stroma.', 'Strict QuPath model: ImmC includes mainly immune cells, mitoses, apoptotic bodies and nucleoli. Others is the negative of the Strict QuPath model. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<BiopsyNum>.*)_(?P<ImgNum>.*)_(?P<Channel>.*)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot containregexp "Stardist")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:7
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "HE") (file doesnot contain "Stardist")
    Name to assign these images:HnE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Bg")
    Name to assign these images:Background_pm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Str")
    Name to assign these images:Stroma_pm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nuc")
    Name to assign these images:Nuclei_pm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ImmC")
    Name to assign these images:ImmC_pm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Others")
    Name to assign these images:Others_pm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Stardist")
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    Name to assign these objects:StardistObjs
    Select the image type:Objects
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
Groups:[module_num:4|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notes:['Groups the images by their biopsy number. ']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:BiopsyNum

Resize:[module_num:5|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notes:['Original H&E images are 2560x1920.', 'The preprocessing steps with QuPath and FIJI result in a downsized probability map.', 'This module resizes the probability map images to match those of the H&E. ']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
    Select the input image:Background_pm
    Name the output image:Resize_Bg
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:HnE
    Additional image count:2
    Select the additional image?:Nuclei_pm
    Name the output image:Resized_Nuclei
    Select the additional image?:Stroma_pm
    Name the output image:Resized_Stroma

UnmixColors:[module_num:6|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notes:['Colour deconvolution of the H&E images into individual hematoxylin and eosin stains. ']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
    Stain count:2
    Select the input color image:HnE
    Name the output image:Hematoxylin
    Stain:Hematoxylin
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    Name the output image:Eosin
    Stain:Eosin
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
ColorToGray:[module_num:7|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notes:['Splitting the colour H&E images into their respective red, green and blue channels. ', 'These channels can be exported individually and combined in CellProfiler Analyst to aid in the supervised machine learning classification of cells. ']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
    Select the input image:HnE
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Background_pm, Eosin, Hematoxylin, ImmC_pm, OrigBlue, OrigGreen, OrigRed
    Select objects to measure:StardistObjs

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:StardistObjs
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureTexture:[module_num:10|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
    Select images to measure:Eosin, Hematoxylin
    Select objects to measure:StardistObjs
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:5

MeasureGranularity:[module_num:11|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
    Select images to measure:Hematoxylin
    Measure within objects?:Yes
    Select objects to measure:StardistObjs
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:2
    Range of the granular spectrum:8

MeasureObjectIntensityDistribution:[module_num:12|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
    Select images to measure:Hematoxylin
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:StardistObjs
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
FilterObjects:[module_num:13|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notes:['1. TILs', '2. Others', '3. Tumour', '4. Plasma Cells']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
    Select the objects to filter:StardistObjs
    Name the output objects:TILs_Star
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\HEPT_Pipeline_Github\\CellProfilerAnalyst_Models
    Rules or classifier file name:CPA_Model_1.txt
    Class number:1
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:No

FilterObjects:[module_num:14|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
    Select the objects to filter:StardistObjs
    Name the output objects:Tumour_Star
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\HEPT_Pipeline_Github\\CellProfilerAnalyst_Models
    Rules or classifier file name:CPA_Model_1.txt
    Class number:3
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:No

FilterObjects:[module_num:15|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
    Select the objects to filter:StardistObjs
    Name the output objects:PlasmaCells_Star
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\HEPT_Pipeline_Github\\CellProfilerAnalyst_Models
    Rules or classifier file name:CPA_Model_1.txt
    Class number:4
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:No

FilterObjects:[module_num:16|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
    Select the objects to filter:StardistObjs
    Name the output objects:Others_Star
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\HEPT_Pipeline_Github\\CellProfilerAnalyst_Models
    Rules or classifier file name:CPA_Model_1.txt
    Class number:2
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:No

ImageMath:[module_num:17|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notes:['Adding probability maps from QuPath model to hematoxylin stain to improve the segmentation of individual tumour cells. ']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Hema_AddPm
    Image or measurement?:Image
    Select the first image:Hematoxylin
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Resized_Nuclei
    Multiply the second image by:0.35
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
IdentifyPrimaryObjects:[module_num:18|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notes:['Identifying nuclei of tumour cells and immune cells with the help of the Lenient_QuPath model.', '- Size 20-100px: If the min size is too small, vacuolated cells tend to be split into 2 or 3 smaller objects.', '- High threshold smoothing scale to try and get the objects with smooth edges', '- "Shape" is used to distinguish clumped objects and draw dividing lines as many of the cells are overlapped or clustered together', '- Suppress local maxima: 15px distance to prevent cells from being split into 2 or 3 smaller objects ']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
    Select the input image:Hema_AddPm
    Name the primary objects to be identified:AllNuclei
    Typical diameter of objects, in pixel units (Min,Max):15,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2.3
    Threshold correction factor:0.90
    Lower and upper bounds on threshold:0.35,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Background
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:19|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notes:["Identifying small objects from the Strict_QuPath model's probability maps which correspond generally to nucleoli and apoptotic bodies."]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
    Select the input image:ImmC_pm
    Name the primary objects to be identified:NucleoliApoptosis
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ImageMath:[module_num:20|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notes:['Adding the probability maps from the Strict_QuPath model to the hematoxylin image to help segment immune cells and mitoses. ']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Hema_AddImmC
    Image or measurement?:Image
    Select the first image:Hematoxylin
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ImmC_pm
    Multiply the second image by:0.3
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
IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:Hema_AddImmC
    Name the primary objects to be identified:LymphocytesMitoses
    Typical diameter of objects, in pixel units (Min,Max):15,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.35,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:22|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
    Select images to measure:Eosin, Hema_AddImmC, Hematoxylin, ImmC_pm, OrigBlue, OrigGreen, OrigRed, Others_pm
    Select objects to measure:AllNuclei, LymphocytesMitoses

MeasureObjectSizeShape:[module_num:23|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
    Select object sets to measure:AllNuclei, LymphocytesMitoses
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:24|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
    Select images to measure:Hematoxylin
    Select objects to measure:AllNuclei, LymphocytesMitoses
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:5

MeasureGranularity:[module_num:25|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
    Select images to measure:Hema_AddImmC, Hematoxylin
    Measure within objects?:Yes
    Select objects to measure:AllNuclei, LymphocytesMitoses
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:2
    Range of the granular spectrum:8

MeasureObjectIntensityDistribution:[module_num:26|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
    Select images to measure:Hematoxylin
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:AllNuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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    Image:None
    Objects to display:Do not use
    Number of bins:4
    Measurement:Radial CV
    Color map:Spectral_r
    Save display as image?:No
    Output image name:Heatmap

MeasureObjectIntensityDistribution:[module_num:27|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
    Select images to measure:Hematoxylin
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:None
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    Select objects to measure:LymphocytesMitoses
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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    Image:None
    Objects to display:Do not use
    Number of bins:4
    Measurement:Radial CV
    Color map:Spectral_r
    Save display as image?:No
    Output image name:Heatmap

FilterObjects:[module_num:28|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notes:['"AllNuclei" identified by IdentifyPrimaryObjects #18 are classified by CPA rules into "Tumour" and "Others".', '', 'This module obtains cells identified as tumour by CPA.']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
    Select the objects to filter:AllNuclei
    Name the output objects:TumourCPA
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\HEPT_Pipeline_Github\\CellProfilerAnalyst_Models
    Rules or classifier file name:CPA_Model_2.txt
    Class number:1
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:No

FilterObjects:[module_num:29|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notes:['"AllNuclei" identified by IdentifyPrimaryObjects #12 are classified by CPA rules into "Tumour" and "Others".', '', 'This module obtains cells identified as "Others" by CPA.']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
    Select the objects to filter:AllNuclei
    Name the output objects:OthersCPA
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\HEPT_Pipeline_Github\\CellProfilerAnalyst_Models
    Rules or classifier file name:CPA_Model_2.txt
    Class number:2
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:No

MeasureObjectNeighbors:[module_num:30|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notes:['Others are mainly stromal cells. So a "Tumour cell" surrounded by stromal cells is likely a mis-segmented cell and can be excluded. ', '', 'This module identifies "Tumour" cells with several "Others" neighbours.']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
    Select objects to measure:TumourCPA
    Select neighboring objects to measure:OthersCPA
    Method to determine neighbors:Within a specified distance
    Neighbor distance:70
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:31|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notes:['The objects classified as "TumourCPA" likely contained some plasma cells misclassified as tumour. Here, these cells are excluded. If an immune infiltrate has several plasma cells, it tends to come in relatively large quantities hence wrongly classified tumour cells will unlikely have several similar neighbours. ']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
    Select the objects to filter:TumourCPA
    Name the output objects:Tumor1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_OthersCPA_70
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:5
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
FilterObjects:[module_num:32|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notes:['"LymphocytesMitoses" identified by IdentifyPrimaryObjects #21 are classified by CPA rules into "TILsMitoses", "Plasma" and "Others".', '', 'This module obtains cells identified as TILs or Mitoses by CPA.', '']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
    Select the objects to filter:LymphocytesMitoses
    Name the output objects:TILsMitoses
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\HEPT_Pipeline_Github\\CellProfilerAnalyst_Models
    Rules or classifier file name:CPA_Model_3.txt
    Class number:1
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:No

FilterObjects:[module_num:33|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notes:['CPA model is used to pick out plasma cells and "others" which are mainly tumor cells. Tumour cells will be filtered out to leave only plasma cells. ']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
    Select the objects to filter:LymphocytesMitoses
    Name the output objects:PlasmaOthers
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|D:\\HEPT_Pipeline_Github\\CellProfilerAnalyst_Models
    Rules or classifier file name:CPA_Model_3.txt
    Class number:3
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:No

CombineObjects:[module_num:34|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notes:['Combining tumour from stardist and QuPath', '', 'Stardist tumour cells tend to be better segmented in terms of shape but are more suscpetible to variation in H&E stains hence miss out more faded cells. ']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
    Select initial object set:Tumour_Star
    Select object set to combine:Tumor1
    Select how to handle overlapping objects:Discard
    Name the combined object set:TumourCombined1

MeasureObjectNeighbors:[module_num:35|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notes:['Tumour cells surrounded by stardist plasma cells are likely wrongly classified']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
    Select objects to measure:TumourCombined1
    Select neighboring objects to measure:PlasmaCells_Star
    Method to determine neighbors:Within a specified distance
    Neighbor distance:70
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:36|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
    Select the objects to filter:TumourCombined1
    Name the output objects:TumourCombined
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_PlasmaCells_Star_70
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:5
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
RelateObjects:[module_num:37|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
    Parent objects:TumourCombined
    Child objects:TILsMitoses
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:38|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
    Parent objects:TumourCombined
    Child objects:Others_Star
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:39|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
    Parent objects:TumourCombined
    Child objects:PlasmaCells_Star
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:40|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notes:['Tumour cells that coincide with "TILsMitoses", "Others_Star" and "PlasmaCells_Star" are excluded here.']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
    Select the objects to filter:TumourCombined
    Name the output objects:TumourFinal
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_Others_Star_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:Children_PlasmaCells_Star_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
    Select the measurement to filter by:Children_TILsMitoses_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
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
RelateObjects:[module_num:41|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
    Parent objects:PlasmaCells_Star
    Child objects:TILsMitoses
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:42|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notes:['Stardist tends to call some TILs plasma cells so if they are identified by QuPath as TILs then we will exclude this from PlasmaCells_Star to form the final Plasma Cells object.', '', 'PlasmaCells1 is prior to removing tumour cells wrongly classified as plasma cells. ']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
    Select the objects to filter:PlasmaCells_Star
    Name the output objects:PlasmaCells1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_TILsMitoses_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0
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
MeasureObjectNeighbors:[module_num:43|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notes:['Plasma cells surrounded by tumour cells are likely wrongly classified. Some plasma cells look like tumour cells.']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
    Select objects to measure:PlasmaCells1
    Select neighboring objects to measure:TumourFinal
    Method to determine neighbors:Within a specified distance
    Neighbor distance:70
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:44|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
    Select the objects to filter:PlasmaCells1
    Name the output objects:PlasmaCellsFinal
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_TumourFinal_70
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:6
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
CombineObjects:[module_num:45|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notes:['Merging TILs from QuPath and Stardist.']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
    Select initial object set:TILsMitoses
    Select object set to combine:TILs_Star
    Select how to handle overlapping objects:Merge
    Name the combined object set:TILsFinal

MeasureObjectNeighbors:[module_num:46|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
    Select objects to measure:TILsFinal
    Select neighboring objects to measure:TumourFinal
    Method to determine neighbors:Within a specified distance
    Neighbor distance:70
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
FilterObjects:[module_num:47|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notes:['Any TIL with less than 7 neighbours will be a stromal TIL']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
    Select the objects to filter:TILsFinal
    Name the output objects:StromalTILs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_TumourFinal_70
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:5
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
FilterObjects:[module_num:48|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
    Select the objects to filter:TILsFinal
    Name the output objects:IntraTumouralTILs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Neighbors_NumberOfNeighbors_TumourFinal_70
    Filter using a minimum measurement value?:Yes
    Minimum value:6
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:49|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notes:['"NucleoliApoptosis" from IdentifyPrimaryObjects #13 with tumour cells as parents are likely nucleoli or heterochromatic nuclear DNA rather than apoptotic bodies. ']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
    Parent objects:TumourFinal
    Child objects:NucleoliApoptosis
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Nucleoli
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
SplitOrMergeObjects:[module_num:50|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notes:['In some cases cells in mitosis may be incorrectly picked up as 2 smaller pieces. This module merges incorrectly split mitotic figures into a single object.']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
    Select the input objects:IntraTumouralTILs
    Name the new objects:IntraTumoralObjs
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectIntensity:[module_num:51|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
    Select images to measure:Hema_AddPm, Hematoxylin
    Select objects to measure:TumourFinal

MeasureGranularity:[module_num:52|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
    Select images to measure:Hema_AddPm, Hematoxylin
    Measure within objects?:Yes
    Select objects to measure:TumourFinal
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:2
    Range of the granular spectrum:8

MeasureObjectSizeShape:[module_num:53|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
    Select object sets to measure:TumourFinal
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureTexture:[module_num:54|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
    Select images to measure:Hema_AddPm, Hematoxylin
    Select objects to measure:TumourFinal
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectNeighbors:[module_num:55|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
    Select objects to measure:TumourFinal
    Select neighboring objects to measure:TumourFinal
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureImageAreaOccupied:[module_num:56|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
    Measure the area occupied by:Objects
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    Select object sets to measure:TumourFinal

Threshold:[module_num:57|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
    Select the input image:Resized_Stroma
    Name the output image:Binary_Stroma
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureImageAreaOccupied:[module_num:58|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:Binary_Stroma
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
CalculateMath:[module_num:59|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
    Name the output measurement:TIL_Index1
    Operation:Multiply
    Select the first operand measurement type:Image
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    Select the first operand measurement:Count_StromalTILs
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:AreaOccupied_AreaOccupied_TumourFinal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:60|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
    Name the output measurement:TIL_Index2
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Math_TIL_Index1
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Binary_Stroma
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToDatabase:[module_num:61|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|D:\\
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:SQLite_Name
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:Experiment_Name
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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